pathstacks = getDirectory("Choose 'collected-stacks' directory");
pathseq = getDirectory("Choose 'image-sequences' directory");
pathresults = getDirectory('intensity-measurements') // defined in complete.ijm

//////// makes sequences
inputseq = pathstacks;
listseq = getFileList(pathstacks);
for (j=0; j<listseq.length; j++) {           
	action(inputseq, listseq[j]);
	function action(inputseq, filename) {
		open(inputseq + filename);
		File.makeDirectory(pathseq+filename);
		pathsaveseq = pathseq+filename+"/";
		run("Image Sequence... ", "format=TIFF name=sequence start=0 digits=4 save=pathsaveseq");
		close();
		
	}
}	
